Journal
Description: Main 40x gevi stream/trigger journal
  was "96well-GFP-Andor-10sec2017ARCLIGHT96F_v2.JNL"
Version VersionNumber=2.4
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth).
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"
Select Magnification
  stSetting = "40X"
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"


Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path

Sweep_No = 1
Assign Variable Interactive
  focusOffset = 113
Disabled Run Journal
  stExecuteJournal = "D:\MetaMorph\Journals\Select Folder.jnl"
Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\Neuronal_Culture_DataMM\refs\sampleOut.STG"
Select Magnification
  stSetting = "40X"
MDA - Load State
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GEVI-Screen\GEVI-main.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled
Save Memory List
  stFilename = "D:\MetaMorph\Data\ONESHOT.STG"

